PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': '', 'gender': "['男','女']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  backgroundFit = cover
  backgroundImg = background_image.jpg
  expName = experiment2
  keyboardBackend = ioHub
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Routines
  Routine intro
    ImageComponent intro_image
      image = intro_image.jpg
      saveStartStop = False
      size = (1.1,0.8)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine charge
    CodeComponent charge_code
      Code Type = Auto->JS
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      Begin Routine:
        tmp_invest =1
        safe_account_text = '安全账户：' + str(safe_account)
      Each Frame:
        if charge_slider.getRating() is None :
            tmp_invest = 1
        else :
            tmp_invest = int(charge_slider.getRating())
        tmp_invest_text=str(tmp_invest)
    SliderComponent charge_slider
      borderColor = black
      fillColor = blue
      forceEndRoutine = False
      granularity = 1
      initVal = 1
      labels = (1,100)
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 100)
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    ImageComponent charge_image
      image [set every repeat] = charge_image.jpg
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.96, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent account_text
      color = black
      letterHeight = 0.05
      pos = (-0.45, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $safe_account_text
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    ButtonComponent charge_button
      bold = True
      color = black
      fillColor = 0.9216, 0.9216, 0.7255
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.35)
      save = none
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text [set every frame] = $tmp_invest_text
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import sound
        feedbackText=''
        bang = sound.Sound("bang.wav")
        leaky = sound.Sound("leaky.wav") #TODO
      Begin Routine:
        #if popped :
        #    continueRoutine = True
        #else :
        #    continueRoutine = False

        event.clearEvents()
        stateSize = initSize
        stateImage = crackImageFile
        if popped==True:
            if int(probas) == 1:
                feedbackText='在第'+str(lossPoint) +'个交易日后，气球炸了！\n你的收益为:' + str(tmp_profit)+'\n请按回车键继续'
                bang.play()
            else:
                stateImage = imageFile
                feedbackText ='在第'+str(lossPoint) +'个交易日后，气球漏气了！\n你的收益为:'+ str(tmp_profit)+'\n请按回车键继续'
                leaky.play()
        else:
            feedbackText='气球将在第'+str(lossPoint) +'个交易日后爆炸/漏气，\n你的收益为:'+ str(tmp_profit)+'\n请按回车键继续'
            stateSize = balloonSize
            stateImage = imageFile
    ImageComponent feedback_image
      image [set every repeat] = $stateImage
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.15, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent feedback_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $feedbackText
    KeyboardComponent feedback_key_resp
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine earned
    CodeComponent earned_code
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
        tip_text = ''
        if period == 0:
            if prac_trials.thisTrialN == 2:
                continueRoutine=True
                tip_text ='您已经进行了%s次实验，最终收益为：%.2f\n按空格键继续实验'%(\
                    prac_trials.thisTrialN + 1, safe_account)
                prac_trials.finished = True
            else:
                continueRoutine=False
        else:
            if trials.thisTrialN == trials.nTotal - 1:
        #    if trials_exp.thisTrialN == 1:
                continueRoutine=True
                tip_text ='您已经进行了%s次实验，最终收益为：%.2f\n按空格键继续实验'%(\
                    trials.thisTrialN + 1, safe_account)
                trials.finished = True
            else:
                continueRoutine=False
    TextComponent earned_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $tip_text
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    KeyboardComponent earned_key_resp
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine assessment
    TextComponent assessment_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        本轮投资结束，看到收益结果后，
        如果感到后悔，请您评价自己的后悔程度
        （1表示稍微有点后悔，7表示非常后悔）
    ImageComponent assessment_image
      image [set every repeat] = assessment_image.jpg
      pos = (0, 0.05)
      saveStartStop = False
      size = (1, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent assessment_slider
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = True
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine instructions
    CodeComponent intro_code
      Code Type = Auto->JS
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      Begin Routine:
        safe_account =float('%.2f'%0.00)
    ImageComponent formal_image
      image = formal_image.jpg
      saveStartStop = False
      size = (1.1, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent instructions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruction_prac
    ImageComponent instruction_prac_image
      image = intro_prac_image.jpg
      saveStartStop = False
      size = (1.1,0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_prac_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent instruction_prac_code
      Code Type = Auto->JS
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      Begin Experiment:
        safe_account =float('%.2f'%0)
  Routine ending
    ImageComponent ending_image
      image = thanks.jpg
      size = (1.1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent ending_key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine intro_2
    ImageComponent intro_image2
      image = intro_image2.jpg
      saveStartStop = False
      size = (1.1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent intro_2key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent trial_code
      Code Type = Py
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      Begin Experiment:
        initSize = 0.08
        expandSize = 0.002
        balloonSize=0.08

        safe_account  =float("{:.2f}".format(0))

        tri_num = 0
      Begin Routine:
        balloonSize=initSize
        popped=False
        nPumps=0
        nVal = 0 # 有效充气
        inval_in = 0 # 无效充气次数
        noExpandList = [r1,r2,r3]
        event.clearEvents()

        invest_account_text = '投资账户：' + str(int(tmp_invest))
        pum_msg = '股市第0个交易日 \n 当前股价为' + str(int(tmp_invest))

        tri_num += 1

        tri_msg = '当前是第' + str(tri_num-3) + '轮，共60轮'
      Each Frame:
        if event.getKeys(['space']):
            nPumps += 1
            nVal += 1
            if nPumps == lossPoint:
                popped=True
                continueRoutine=False
            elif nPumps in noExpandList:
                nVal -= 1
                inval_in += 1
        if event.getKeys(['return']):
            popped=False
            continueRoutine=False


        balloonSize=initSize + nVal * expandSize

        pum_msg = '股市第' + str(nPumps) + '个交易日 \n 当前股价为' + str(int(tmp_invest + nVal))
      End Routine:
        if popped:
            tmp_profit = (tmp_invest +  nPumps - inval_in) * (1 - probas) - tmp_invest
        else:
            if nPumps > 0:
                tmp_profit = (tmp_invest + nPumps - inval_in) * (1 + 0.002 * tmp_invest) - tmp_invest
            else :
                tmp_profit = 0
        tmp_profit = float("%.2f"%tmp_profit)
        safe_account += tmp_profit
        safe_account=float("%.2f"%safe_account)
        if period== 1 :
            thisExp.addData('nPumps', nPumps)
            thisExp.addData('size', balloonSize)
            thisExp.addData('inval_in', inval_in)
            thisExp.addData('safe_account', safe_account)
            thisExp.addData('invest', tmp_invest)
            thisExp.addData('popped', int(popped))
    ImageComponent Balloon
      image [set every repeat] = balloon.png
      saveStartStop = False
      size [set every frame] = (balloonSize,balloonSize*2.2)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent reminder_text
      color = black
      font = Times New Roman
      letterHeight = 0.04
      pos = (0, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        按空格键充气
        按回车键中止
    TextComponent safeaccount_text
      color = black
      letterHeight = 0.05
      pos = (-0.45, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $safe_account_text
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    TextComponent investaccount_text
      color = black
      letterHeight = 0.05
      pos = (0.45, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $invest_account_text
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    KeyboardComponent bankButton_key_resp
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent pumpwarning_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $pum_msg
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    TextComponent text
      color = black
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [condition] = tri_num>3
      text [set every repeat] = $tri_msg
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  Routine formal_trial
    CodeComponent formal_trail_code
      Code Type = Py
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      Begin Experiment:
        initSize = 0.1
        expandSize = 0.0015
        balloonSize=0.1

        safe_account  =float("{:.2f}".format(0))
      Begin Routine:
        balloonSize=initSize
        popped=False
        nPumps=0
        nVal = 0 # 有效充气
        inval_in = 0 # 无效充气次数
        noExpandList = [r1,r2,r3]
        event.clearEvents()

        invest_account_text = '投资账户：' + str(int(tmp_invest))
        pum_msg = '股市第0个交易日 \n 当前股价为' + str(int(tmp_invest))
      Each Frame:
        if event.getKeys(['space']):
            nPumps += 1
            nVal += 1
            if nPumps == lossPoint:
                popped=True
                continueRoutine=False
            elif nPumps in noExpandList:
                nVal -= 1
                inval_in += 1
        if event.getKeys(['return']):
            popped=False
            continueRoutine=False


        balloonSize=initSize + nVal * expandSize

        pum_msg = '股市第' + str(nPumps) + '个交易日 \n 当前股价为' + str(int(tmp_invest + nVal))
      End Routine:
        if popped:
            tmp_profit = (tmp_invest +  nPumps - inval_in) * (1 - probas) - tmp_invest
        else:
            if nPumps > 0:
                tmp_profit = (tmp_invest + nPumps - inval_in) * (1 + 0.002 * tmp_invest) - tmp_invest
            else :
                tmp_profit = 0
        tmp_profit = float("%.2f"%tmp_profit)
        safe_account += tmp_profit
        safe_account=float("%.2f"%safe_account)
        if period== 1 :
            thisExp.addData('nPumps', nPumps)
            thisExp.addData('size', balloonSize)
            thisExp.addData('inval_in', inval_in)
            thisExp.addData('safe_account', safe_account)
            thisExp.addData('invest', tmp_invest)
            thisExp.addData('popped', int(popped))
    ImageComponent Balloon_2
      image [set every repeat] = balloon.png
      saveStartStop = False
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
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  Routine relax
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        safe_account =float('%.2f'%0.00)
    KeyboardComponent relax_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 30
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    ImageComponent relax_image
      image = relax.jpg
      size = (1.1, 0.8)
      startVal [time (s)] = 0.0
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    MovieComponent clock_movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = clock.mp4
      pos = (0, -0.35)
      size = (0.3, 0.18)
      startVal [time (s)] = 0.0
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  Routine formal_intro2
    ImageComponent formal_intro_image
      image = formal_intro_image.jpg
      size = (1.1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent formal_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine intro_2
  Routine instruction_prac
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = exp_condi_pra.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'balloon.png', 'lossPoint': 64, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 10, 'r2': 21, 'r3': 50, 'period': 0},
      {'imageFile': 'balloon.png', 'lossPoint': 112, 'probas': 1, 'crackImageFile': 'balloon_crack.png', 'r1': 53, 'r2': 78, 'r3': 101, 'period': 0},
      {'imageFile': 'balloon.png', 'lossPoint': 21, 'probas': 0.75, 'crackImageFile': 'balloon_crack.png', 'r1': 3, 'r2': 8, 'r3': 11, 'period': 0}]
    Routine charge
    Routine trial
    Routine feedback
    Routine assessment
    Routine earned
  LoopTerminator prac_trials
  Routine intro
  Routine formal_intro2
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = exp_condi_H.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imageFile': 'balloon.png', 'lossPoint': 44, 'probas': 1, 'crackImageFile': 'balloon_crack.png', 'r1': 20, 'r2': 30, 'r3': 44, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 8, 'probas': 0.75, 'crackImageFile': 'balloon_crack.png', 'r1': 0, 'r2': 0, 'r3': 0, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 57, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 22, 'r2': 35, 'r3': 46, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 11, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 0, 'r2': 0, 'r3': 0, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 44, 'probas': 1, 'crackImageFile': 'balloon_crack.png', 'r1': 13, 'r2': 30, 'r3': 32, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 26, 'probas': 0.75, 'crackImageFile': 'balloon_crack.png', 'r1': 1, 'r2': 23, 'r3': 25, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 15, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 3, 'r2': 8, 'r3': 11, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 47, 'probas': 1, 'crackImageFile': 'balloon_crack.png', 'r1': 29, 'r2': 36, 'r3': 44, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 53, 'probas': 1, 'crackImageFile': 'balloon_crack.png', 'r1': 25, 'r2': 33, 'r3': 50, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 37, 'probas': 0.75, 'crackImageFile': 'balloon_crack.png', 'r1': 6, 'r2': 28, 'r3': 34, 'period': 1}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
    Routine charge
    Routine trial
    Routine feedback
    Routine assessment
    Routine earned
  LoopTerminator trials
  Routine relax
  Routine intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = exp_condi_L.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imageFile': 'balloon.png', 'lossPoint': 100, 'probas': 0.25, 'crackImageFile': 'balloon_crack.png', 'r1': 57, 'r2': 64, 'r3': 81, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 85, 'probas': 0.75, 'crackImageFile': 'balloon_crack.png', 'r1': 35, 'r2': 59, 'r3': 78, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 98, 'probas': 0.25, 'crackImageFile': 'balloon_crack.png', 'r1': 4, 'r2': 56, 'r3': 66, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 103, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 45, 'r2': 59, 'r3': 82, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 73, 'probas': 0.25, 'crackImageFile': 'balloon_crack.png', 'r1': 13, 'r2': 38, 'r3': 58, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 65, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 45, 'r2': 48, 'r3': 57, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 99, 'probas': 0.25, 'crackImageFile': 'balloon_crack.png', 'r1': 35, 'r2': 78, 'r3': 93, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 80, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 24, 'r2': 32, 'r3': 48, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 94, 'probas': 0.5, 'crackImageFile': 'balloon_crack.png', 'r1': 49, 'r2': 69, 'r3': 91, 'period': 1},
      {'imageFile': 'balloon.png', 'lossPoint': 112, 'probas': 0.75, 'crackImageFile': 'balloon_crack.png', 'r1': 40, 'r2': 43, 'r3': 97, 'period': 1}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
    Routine charge
    Routine trial
    Routine feedback
    Routine assessment
    Routine earned
  LoopTerminator trials_2
  Routine ending
